# 1 "C:/Bruker/TopSpin3.6.1/exp/stan/nmr/lists/pp/selnogp"
;selnogp
;avance-version (12/01/11)
;1D NOESY using selective refocussing with a shaped pulse
;dipolar coupling may be due to noe or chemical exchange.
;
;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
;   J. Magn. Reson. 70, 106 (1986)
;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, 
;   J. Am. Chem. Soc 116, 6037 (1994)
;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka, 
;   J. Am. Chem. Soc 117, 4199-4200 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p2=p1*2"


"d20=d8*0.5-p16-d16"
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"acqt0=-p1*2/3.1416-4u"


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  20u pl1:f1
  d1
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  (p1 ph1):f1
  3u
  p16:gp1
  d16 pl0:f1
  p12:sp2:f1 ph2:r
  3u
  p16:gp1
  d16 pl1:f1
  (p1 ph3):f1
  d20
  p16:gp2
  d16
  3u
  (p2 ph4):f1
  3u
  p16:gp2*-1
  d16
  d20
  (p1 ph5):f1
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit
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ph1=0 2 
ph2=0 0 1 1 2 2 3 3
ph3=0
ph4=0
ph5=0
ph31=0 2 2 0 


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp2: f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                            [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d16: delay for homospoil/gradient recovery
;d20: d8*0.5 - p16 - d16
;cnst21: chemical shift for selective pulse (offset, in ppm)
;ns: 2 * n, total number of scans: NS * TD0
;ds: 4
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;phcor 2 : phasedifference between power levels sp1 and pl1

;choose p12 according to desired selectivity
;the flip-angle is determined by the amplitude
;set O1 on resonance on the multiplet to be excited or use spoffs

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;use gradient ratio:    gp 1 : gp 2
;                         15 :   40

;for z-only gradients:
;gpz1: 15%
;gpz2: 40%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
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;$Id: selnogp,v 1.20 2012/01/31 17:49:28 ber Exp $
