# 1 "C:/Bruker/TopSpin3.6.1/exp/stan/nmr/lists/pp/hmbcgpl2ndqf"
;hmbcgpl2ndqf
;avance-version (12/01/11)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;optimized on long range couplings
;with two-fold low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;using gradient pulses for selection
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p2=p1*2"
"d6=1s/(cnst13*2)"


"d0=3u"
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"in0=inf1/2"


"DELTA1=1s/(2 * cnst6)-p16-d16"
"DELTA2=1s/(2 * cnst7)-p16-d16"
"DELTA3=d6-p16-d16-4u"
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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define list<loopcounter> SPARSELIST = <$NUSLIST>
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter STNCNT
"STNCNT=SPARSELIST.len/1"
"MCREST = d1 - d1"
"MCWRK = 0.250000*d1"

    dccorr
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1 ze
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LBLAV, MCWRK
  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
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2 MCWRK  * 3
LBLSTN, MCWRK
  MCREST
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3 p1 ph1
  DELTA1 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp4
  d16
  p3:f2 ph3
  DELTA2
  p16:gp5
  d16
  p3:f2 ph3
  4u
  p16:gp6
  d16
  DELTA3
  p3:f2 ph4
  d0
  4u
  p16:gp1
  d16
  p2 ph2
  4u
  p16:gp2
  d16
  d0
  p3:f2 ph5
  4u
  p16:gp3
  d16
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
  lo to LBLSTN times STNCNT
  MCWRK rf #0 SPARSELIST.res
  lo to LBLAV times tdav
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exit


ph1=0
ph2=0 0 0 0 2 2 2 2
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0
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;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings
;d16: delay for homospoil/gradient recovery
;cnst6: = 1J(XH)min
;cnst7: = 1J(XH)max
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF


;use gradient ratio:
;     gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6
;       50 :   30 : 40.1 :   15 :  -10 :   -5   for C-13
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;for z-only gradients:
;gpz1: 50%   for C-13
;gpz2: 30%
;gpz3: 40.1%   for C-13
;gpz4: 15%
;gpz5: -10%
;gpz6: -5%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100

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;$Id: hmbcgpl2ndqf,v 1.6 2012/01/31 17:49:23 ber Exp $
