# 1 "C:/Bruker/TopSpin3.6.1/exp/stan/nmr/lists/pp/user/piphsqmbc"
;piphsqmbc
;Pure In-Phase HSQMBC  with final adiabatic z-filter and perfect echo gradient
;optional IPAP using const25

;"Pure In-Phase heteronuclear correlation NMR experiments" by
;L. Castañar, J. Saurí, R. T. Williamson, A. Virgili and T. Parella
;Angewandte Chemie International Edition (2014). DOI: 10.1002/anie.201404136

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

"p2=p1*2"
"d6=1s/(cnst2*4)"
"d0=3u"
"in0=inf1/2"
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"DELTA2=d6-larger(p2,p14)/2"
"DELTA=p16+d16+p2+d0*2"
"DELTA4=p16+d16"

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; dimension 2D; AQ_mode  (F1) Echo-Antiecho
define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d1 - d1"
"MCWRK = 0.166667*d1"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK 
LBLSTS1, MCWRK  * 4
LBLF1, MCWRK pl1:f1
  MCREST
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3 (p1 ph1)

  DELTA2 pl20:f2
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  DELTA2 pl2:f2 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
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  (p1 ph2) (p3 ph3):f2
  d0 
  (p2 ph5)
  d0
  p16:gp1*EA
  d16 pl20:f2
  (p24:sp7 ph4):f2
  DELTA pl2:f2
  (ralign (p1 ph1) (p3 ph4):f2 )

if "cnst25==0"
	{
	DELTA2 pl20:f2
              (center (p2 ph1) (p14:sp3 ph1):f2 )
              DELTA2 pl2:f2
	}
	else
	{
	  d6
               (p2 ph2) 
               d6
	}
  
  if "cnst25==0"
	{
	(p1 ph2):f1
	}
	else
	{
	(p1 ph1):f1
	}

  d12 pl0:f1
  300u gron0
  (p32:sp29 ph1):f1
  300u groff
  d12 pl1:f1
  p1 ph1
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  DELTA4
  p2 ph1
  DELTA4
  p1 ph2
  DELTA4
  p2 ph1
  p16:gp2
  d16 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

  go=2 ph31 
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  MCWRK  wr #0 if #0 zd igrad EA
  lo to LBLSTS1 times 2
  MCWRK id0  MCWRK  ip3*2  MCWRK  ip6*2  MCWRK  ip31*2
  lo to LBLF1 times ST1CNT
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
   
ph1=0 
ph2=1
ph3=0 2
ph4=0
ph5=0 
ph6=0
ph31=0 2

;pl0 : 0W
;pl20 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse 180 degree
;sp7: f2 channel - shaped pulse 180 degree
;sp29: f2 channel - shaped adiabatic pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion                      
;p24: f2 channel - 180 degree shaped pulse for refocusing                   
;p32: f2 channel - 180 degree shaped pulse for adiabatic z-filter                              
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;cnst25:0 (IP) 1 (AP)
;cnst2: 8Hz
;d6 : 1/(4J)XH (long range coupling constant)
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 2 * n
;DS: >= 2
;td1: number of experiments
;FnMODE: echo-antiecho
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;use gradient ratio:	gp 1 : gp 2
;			  80 : 20.1    for C-13
;			  80 :  8.1    for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15
;gpz0: 3%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
